OpenViBE-Scenario
0x790d75b8 = Jozef Legény
0x8c1fc55b = 1.0
0x9f5c4075 = SSVEP Acquisition Test
0xf6b2e3fa = SSVEP
0xf8034a49 = Inria

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "5;6;7;8;9;10"
  Channel List = 5;6;7;8;9;10
  Action = Select
  Channel Matching Method = Smart

Generic stream reader => #2
  Filename = ${Player_ScenarioDirectory}/[0] TestSignalFiles/(sample)bci-ssvep-training.ov
Input stream 1=#2.Output stream 2, Input stream 2=#2.Output stream 3 -> 0xc67a01dc Identity => #3
#3.Output stream 1 -> Spatial Filter "Average"
  Spatial filter coefficients = 1;1;1;1;1;1
  Number of output channels = 1
  Number of input channels = 6
  Filter matrix file =
-> Temporal filter => #5
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6.000000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
Data=#5 -> Signal display "Filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#5 -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Spectral analysis => #9
  Spectral components = Amplitude
#9.Amplitude -> FFT of average signal
  Minimum frequency to display = 0
  Maximum frequency to display = 40
#9.Amplitude -> Identity => #11
-> Generic stream writer "(FFT spectral) Generic steram writer"
  Filename = ${Player_ScenarioDirectory}/[0] TestSignalFiles/[$core{date}-$core{time}]fftspectral-record.ov
  Use compression = false
#11 -> (FFT spectral) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[0] TestSignalFiles/[$core{date}-$core{time}]fftspectral-record.csv
  Column separator = ;
  Precision = 10
Input stream 2=#5 -> (Averaged&Filtered signal) Generic stream writer
  Filename = ${Player_ScenarioDirectory}/[0] TestSignalFiles/[$core{date}-$core{time}]averaged-ssvep-record.ov
  Use compression = false
#5 -> (Averaged&Filtered signal) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[0] TestSignalFiles/[$core{date}-$core{time}]averaged-ssvep-record.csv
  Column separator = ;
  Precision = 10
Data=#3.Output stream 1, Stimulations=#3.Output stream 2 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#3.Output stream 1 -> (Raw signal) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[0] TestSignalFiles/[$core{date}-$core{time}]rawssvepsignal-record.csv
  Column separator = ;
  Precision = 10
Input stream 2=#3.Output stream 1, Input stream 3=#3.Output stream 2 -> (Raw signal) Generic stream writer
  Filename = ${Player_ScenarioDirectory}/[0] TestSignalFiles/[$core{date}-$core{time}]rawssvepsignal-record.ov
  Use compression = false
