OpenViBE-Scenario
0x790d75b8 = Jozef Legény
0x8c1fc55b = 1.0
0x9f5c4075 = SSVEP Acquisition Test
0xf6b2e3fa = SSVEP
0xf8034a49 = Inria
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Acquisition test

  Scenario used for testing data acquisition. The signal quality should
  always be checked before training.

  You can monitor signals from electrodes used by SSVEP scenarios :
  CPz, POz, Oz, Iz, O1 and O2. Individual signals are shown for each
  channel, as well as output of the two spatial filters used and the FFT
  of the average of all channels.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Identity => #1
-> Spatial Filter "Average"
  Spatial filter coefficients = 1;1;1;1;1;1
  Number of output channels = 1
  Number of input channels = 6
  Filter matrix file =
-> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6.000000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
-> 0xc67a01dc Time based epoching
  Epoch 1 duration (in sec) = 2.000000
  Epoch 1 intervals (in sec) = 0.500000
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Spectral analysis => #6
  Spectral components = Amplitude
#6.Amplitude -> FFT of average signal
  Minimum frequency to display = 0
  Maximum frequency to display = 40
#6.Amplitude -> Generic stream writer "FFT signal writer"
  Filename = ${Player_ScenarioDirectory}/signals/fftspectral-record-[$core{date}-$core{time}].ov
  Use compression = false
#6.Amplitude -> (FFT spectral) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/signals/fftspectral-record-[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Data=#3 -> Signal display "Filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input stream 2=#1 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/ssvep-record-[$core{date}-$core{time}].ov
  Use compression = false
Data=#1 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#1 -> (Raw signal) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/signals/rawsignal-record-[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
