OpenViBE-Scenario
Comment
  Configurable box

Start => #0
  Filename = ${Player_ScenarioDirectory}/settingtxt/simple-keyboard-to-stimulations.txt
-> UDP Sender Start
  Host = localhost
  Port = 20324
#0 -> SSVEP Training Controller => #2
  Lua Script = ${Player_ScenarioDirectory}/scripts/[2] SSVEP-stimulus-generator.lua
  Goal sequence = 1 2 3 4 1 2 3 4 1 2 3 4
  Stimulation duration = 10
  Break duration = 4
  Flickering delay = 2.000000
Input stimulations 1=#2.Stimulations, Input stimulations 2=#2.New output -> Stimulation multiplexer => #3
#2.New output -> Stimulation listener "StimurationNumber (Target)"
  Log level to use = Information
#2.New output -> 0xc67a01dc UDP Sender
  Host = localhost
  Port = 20322
#2.Stimulations -> Stimulation listener (Trial Start&Stop)
  Log level to use = Information
#2.Stimulations -> UDP Sender
  Host = localhost
  Port = 20326
#2.New output -> (Stimulation Number) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2] AcquiredSignalFiles/[$core{date}-$core{time}]stimulation-number.csv
  Column separator = ;
  Precision = 10
Acquisition client => #9
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#9.Signal stream -> Channel Selector "5;6;7;8;9;10"
  Channel List = 5;6;7;8;9;10
  Action = Select
  Channel Matching Method = Smart
Input stream 1=#9.Signal stream, Input stream 2=#3 -> Identity => #11
#11.Output stream 1 -> Spatial Filter "Average"
  Spatial filter coefficients = 1;1;1;1;1;1;1;1;1;1;1;1
  Number of output channels = 1
  Number of input channels = 12
  Filter matrix file =
-> Temporal filter => #13
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6.000000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Spectral analysis => #16
  Spectral components = Amplitude
#16.Amplitude -> Identity => #17
-> Generic stream writer "(FFT spectral) Generic steram writer"
  Filename = ${Player_ScenarioDirectory}/[2] AcquiredSignalFiles/[$core{date}-$core{time}]fftspectral-record.ov
  Use compression = false
#17 -> (FFT spectral) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2] AcquiredSignalFiles/[$core{date}-$core{time}]fftspectral-record.csv
  Column separator = ;
  Precision = 10
#16.Amplitude -> FFT of average signal
  Minimum frequency to display = 0
  Maximum frequency to display = 40
Input stream 2=#13 -> (Averaged&Filtered signal) Generic stream writer
  Filename = ${Player_ScenarioDirectory}/[2] AcquiredSignalFiles/[$core{date}-$core{time}]averaged-ssvep-record.ov
  Use compression = false
#13 -> (Averaged&Filtered signal) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2] AcquiredSignalFiles/[$core{date}-$core{time}]averaged-ssvep-record.csv
  Column separator = ;
  Precision = 10
Data=#13 -> Signal display "Filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#11.Output stream 1, Stimulations=#11.Output stream 2 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input stream 2=#11.Output stream 1, Input stream 3=#11.Output stream 2 -> (Raw signal) Generic stream writer
  Filename = ${Player_ScenarioDirectory}/[2] AcquiredSignalFiles/[$core{date}-$core{time}]rawssvepsignal-record.ov
  Use compression = false
#11.Output stream 1 -> (Raw signal) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2] AcquiredSignalFiles/[$core{date}-$core{time}]rawssvepsignal-record.csv
  Column separator = ;
  Precision = 10

Generic stream reader
  Filename = ${Player_ScenarioDirectory}/[0] TestSignalFiles/(sample)bci-ssvep-training.ov
