OpenViBE-Scenario
Comment
  Configurable box
Comment
  Connection to the external application

  The external stimulator is controlled through VRPN
  to display the configured sequence of targets at
  desired moments.

Start
  Filename = ${Player_ScenarioDirectory}/settingtxt/simple-keyboard-to-stimulations.txt
-> SSVEP Training Controller => #1
  Lua Script = ${Player_ScenarioDirectory}/scripts/[2] SSVEP-training-controller.lua
  Goal sequence = 0 1 2 3  0 1 2 3  0 1 2 3  0 1 2 3
  Stimulation duration = 10
  Break duration = 5
  Flickering delay = 1.000000
  Training Target Size = 0.5;0.5
  Training Targets' Positions = (0.0;0.0);(0.0;0.5);(-0.5;0.0);(0.5;0.0)
#1.Stimulations -> 0xc73e83ec Identity => #2
Input 1=#2, Input 2=#2, Input 3=#2, Input 4=#2, Input 5=#2 -> 0xc73e83ec Button VRPN Server "Stimulator Control"
  Peripheral name = SSVEP_VRPN_StimulatorControl
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
  Button 3 ON = OVTK_StimulationId_VisualStimulationStart
  Button 3 OFF = OVTK_StimulationId_VisualStimulationStart
  Button 4 ON = OVTK_StimulationId_VisualStimulationStop
  Button 4 OFF = OVTK_StimulationId_VisualStimulationStop
  Button 5 ON = OVTK_GDF_Feedback_Continuous
  Button 5 OFF = OVTK_GDF_End_Of_Trial
#1.New output -> 0xc73e83ec Identity => #4
Input 1=#4, Input 2=#4, Input 3=#4, Input 4=#4, Input 5=#4, Input 6=#4, Input 7=#4 -> 0xc73e83ec Button VRPN Server "Target Select"
  Peripheral name = SSVEP_VRPN_Target
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02
  Button 4 ON = OVTK_StimulationId_Label_03
  Button 4 OFF = OVTK_StimulationId_Label_03
  Button 5 ON = OVTK_StimulationId_Label_04
  Button 5 OFF = OVTK_StimulationId_Label_04
  Button 6 ON = OVTK_StimulationId_Label_05
  Button 6 OFF = OVTK_StimulationId_Label_05
  Button 7 ON = OVTK_StimulationId_Label_06
  Button 7 OFF = OVTK_StimulationId_Label_06
Input stimulations 1=#1.Stimulations, Input stimulations 2=#1.New output -> Stimulation multiplexer => #6
-> Stimulation listener "Multiplexer"
  Log level to use = Information
0xc67a01dc Acquisition client => #8
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#8.Experiment information, Input stream 2=#8.Signal stream, Input stream 3=#6 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/[2] AcquiredSignalFiles/ssvep-record-[$core{date}-$core{time}].ov
  Use compression = false

0xc73e83ec Scenario Control => #10
  Peripheral name = SSVEP_VRPN_StartStop@localhost:${VRPN_ExternalServerPort}
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
#10.Output 2 -> 0xc73e83ec Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop

0xc73e83ec Start Stimulation
  Lua Script = ${Player_ScenarioDirectory}/scripts/start-stimulator.lua
  Delay = 1
-> 0xc73e83ec Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = ${External_Application_Launcher} openvibe-ssvep-demo --run-bg trainer
