OpenViBE-Scenario

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/[2] AcquiredSignalFiles/[2015.11.10-13.07.31]rawssvepsignal-record.ov
  0x8d21ff41 = ${Player_ScenarioDirectory}/[2] AcquiredSignalFiles/[3] AcquiredSignal.cfg
Data=#0.Output stream 2, Stimulations=#0.Output stream 3 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #2
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2 -> Identity => #3
#3.Output stream 1 -> Temporal filter "Frequency 1" => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 19.75
  High cut frequency (Hz) = 20.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1] TemporalFilterFreq/temporal-filter-freq-1.cfg
#3.Output stream 2 -> Target Separator => #5
  Lua Script = ${Player_ScenarioDirectory}/scripts/[3] classifier-training-target-separator.lua
  Targets = 1
  Non Targets = 2 3 4
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#4, Input stimulations=#5.Stimulations -> Stimulation based epoching "SBE" => #6
  Epoch duration (in sec) = 10
  Epoch offset (in sec) = 2
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#4, Input stimulations=#5.New output -> Stimulation based epoching "SBE" => #7
  Epoch duration (in sec) = 10
  Epoch offset (in sec) = 2
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#3.Output stream 2, Signal condition 1=#6.Epoched signal, Signal condition 2=#7.Epoched signal -> CSP Spatial Filter Trainer 1 => #8
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/[3] CSPTrainingFiles/csp-1.cfg
  Filter dimension = 2
  Save as box config = true
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2 -> Identity => #9
#9.Output stream 1 -> Temporal filter "Frequency 2" => #10
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14.75
  High cut frequency (Hz) = 15.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1] TemporalFilterFreq/temporal-filter-freq-2.cfg
#9.Output stream 2 -> Target Separator => #11
  Lua Script = ${Player_ScenarioDirectory}/scripts/[3] classifier-training-target-separator.lua
  Targets = 2
  Non Targets = 3 4 1
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#10, Input stimulations=#11.Stimulations -> Stimulation based epoching "SBE" => #12
  Epoch duration (in sec) = 10
  Epoch offset (in sec) = 2
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#10, Input stimulations=#11.New output -> Stimulation based epoching "SBE" => #13
  Epoch duration (in sec) = 10
  Epoch offset (in sec) = 2
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#9.Output stream 2, Signal condition 1=#12.Epoched signal, Signal condition 2=#13.Epoched signal -> CSP Spatial Filter Trainer 2 => #14
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/[3] CSPTrainingFiles/csp-2.cfg
  Filter dimension = 2
  Save as box config = true
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2 -> Identity => #15
#15.Output stream 1 -> Temporal filter "Frequency 3" => #16
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 11.75
  High cut frequency (Hz) = 12.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1] TemporalFilterFreq/temporal-filter-freq-3.cfg
#15.Output stream 2 -> Target Separator => #17
  Lua Script = ${Player_ScenarioDirectory}/scripts/[3] classifier-training-target-separator.lua
  Targets = 3
  Non Targets = 1 2 4
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#16, Input stimulations=#17.Stimulations -> Stimulation based epoching "SBE" => #18
  Epoch duration (in sec) = 10
  Epoch offset (in sec) = 2
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#16, Input stimulations=#17.New output -> Stimulation based epoching "SBE" => #19
  Epoch duration (in sec) = 10
  Epoch offset (in sec) = 2
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#15.Output stream 2, Signal condition 1=#18.Epoched signal, Signal condition 2=#19.Epoched signal -> CSP Spatial Filter Trainer 3 => #20
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/[3] CSPTrainingFiles/csp-3.cfg
  Filter dimension = 2
  Save as box config = true
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2 -> Identity => #21
#21.Output stream 1 -> 0xc67a01dc Temporal filter "Frequency 4" => #22
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 9.75
  High cut frequency (Hz) = 10.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1] TemporalFilterFreq/temporal-filter-freq-4.cfg
#21.Output stream 2 -> Target Separator => #23
  Lua Script = ${Player_ScenarioDirectory}/scripts/[3] classifier-training-target-separator.lua
  Targets = 4
  Non Targets = 1 2 3
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#22, Input stimulations=#23.Stimulations -> Stimulation based epoching "SBE" => #24
  Epoch duration (in sec) = 10
  Epoch offset (in sec) = 2
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#22, Input stimulations=#23.New output -> Stimulation based epoching "SBE" => #25
  Epoch duration (in sec) = 10
  Epoch offset (in sec) = 2
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#21.Output stream 2, Signal condition 1=#24.Epoched signal, Signal condition 2=#25.Epoched signal -> CSP Spatial Filter Trainer 4 => #26
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/[3] CSPTrainingFiles/csp-4.cfg
  Filter dimension = 2
  Save as box config = true
New input[0]=#8, New input[1]=#14, New input[2]=#20, New input[3]=#26 -> FlipSwitch
  Lua Script = ${Player_ScenarioDirectory}/scripts/[3] classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
