OpenViBE-Scenario
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Scenario description

  This scenario is used for training of the Common Spatial Pattern filters.
  These enable you to use any set of electrodes and will automatically
  select the best combination of them for you.

  By default the dimension of the CSP filters is 2. If you use many
  electrodes you may want to raise this value to get even better precision.

  For the detailed description and experimental protocol, please refer to
  the SSVEP Scenario documentation on the OpenViBE website.

  note: the classifiers go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/classifiers/).
Comment
  Important : Do not forget to
  change the settings in the Generic stream reader to load
  the file you recorded in the previous step. By default the
  scenario uses example data provided with OpenViBE.
Comment
  Signal processing for the first stimulation frequency
Comment
  Signal processing for the second stimulation frequency
Comment
  Signal processing for the third stimulation frequency

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/[2] AcquiredSignalFiles/bci-ssvep-training.ov
  0x8d21ff41 = ${Player_ScenarioDirectory}/[2] AcquiredSignalFiles/[3] AcquiredSignal.cfg
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
Input stream 1=#1.Output stream 1, Input stream 2=#1.Output stream 2 -> Identity => #2
#2.Output stream 1 -> Temporal filter "Frequency 1" => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 19.75
  High cut frequency (Hz) = 20.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1.cfg
#2.Output stream 2 -> Target Separator => #4
  Lua Script = ${Player_ScenarioDirectory}/scripts/[3] classifier-training-target-separator.lua
  Targets = 1
  Non Targets = 0 2 3
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#3, Input stimulations=#4.Stimulations -> Stimulation based epoching "SBE" => #5
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#3, Input stimulations=#4.New output -> Stimulation based epoching "SBE" => #6
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#2.Output stream 2, Signal condition 1=#5.Epoched signal, Signal condition 2=#6.Epoched signal -> CSP Spatial Filter Trainer => #7
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/[3] CSPTrainingFiles/csp-1.cfg
  Filter dimension = 2
  Save as box config = true
Input stream 1=#1.Output stream 1, Input stream 2=#1.Output stream 2 -> Identity => #8
#8.Output stream 1 -> Temporal filter "Frequency 2" => #9
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 19.75
  High cut frequency (Hz) = 20.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2.cfg
#8.Output stream 2 -> Target Separator => #10
  Lua Script = ${Player_ScenarioDirectory}/scripts/[3] classifier-training-target-separator.lua
  Targets = 2
  Non Targets = 0 1 3
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#9, Input stimulations=#10.Stimulations -> Stimulation based epoching "SBE" => #11
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#9, Input stimulations=#10.New output -> Stimulation based epoching "SBE" => #12
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#8.Output stream 2, Signal condition 1=#11.Epoched signal, Signal condition 2=#12.Epoched signal -> CSP Spatial Filter Trainer => #13
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/[3] CSPTrainingFiles/csp-2.cfg
  Filter dimension = 2
  Save as box config = true
Input stream 1=#1.Output stream 1, Input stream 2=#1.Output stream 2 -> Identity => #14
#14.Output stream 1 -> Temporal filter "Frequency 3" => #15
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 19.75
  High cut frequency (Hz) = 20.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3.cfg
#14.Output stream 2 -> Target Separator => #16
  Lua Script = ${Player_ScenarioDirectory}/scripts/[3] classifier-training-target-separator.lua
  Targets = 3
  Non Targets = 0 1 2
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#15, Input stimulations=#16.Stimulations -> Stimulation based epoching "SBE" => #17
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#15, Input stimulations=#16.New output -> Stimulation based epoching "SBE" => #18
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 1
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#14.Output stream 2, Signal condition 1=#17.Epoched signal, Signal condition 2=#18.Epoched signal -> CSP Spatial Filter Trainer => #19
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/[3] CSPTrainingFiles/csp-3.cfg
  Filter dimension = 2
  Save as box config = true
New input[0]=#7, New input[1]=#13, New input[2]=#19 -> 0xc67a01dc FlipSwitch
  Lua Script = ${Player_ScenarioDirectory}/scripts/[3] classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
Data=#0.Output stream 2, Stimulations=#0.Output stream 3 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
