OpenViBE-Scenario

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/[2] AcquiredSignalFiles/[2015.11.12-10.30.07]rawssvepsignal-record.ov
  0x8d21ff41 = ${Player_ScenarioDirectory}/[2] AcquiredSignalFiles/[3] AcquiredSignal.cfg
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Spatial Filter => #2
  Spatial Filter Coefficients = -4.566380e-001 -8.037243e-002 -1.809009e-001 7.968017e-002 8.539049e-001 -1.295933e-001 1.170715e-001 2.470145e-001 4.882270e-001 6.213619e-002 -3.507261e-001 -7.483601e-001
  Number of Output Channels = 2
  Number of Input Channels = 6
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3] CSPTrainingFiles/csp-1.cfg
Input stream 1=#2, Input stream 2=#1.Output stream 2 -> Identity => #3
#3.Output stream 1 -> Temporal filter "Frequency 1" => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 19
  High cut frequency (Hz) = 21
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1] TemporalFilterFreq/temporal-filter-freq-1.cfg
#3.Output stream 2 -> Target Separator => #5
  Lua Script = ${Player_ScenarioDirectory}/scripts/[3] classifier-training-target-separator.lua
  Targets = 1
  Non Targets = 2 3 4
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#4, Input stimulations=#5.Stimulations -> 0xc67a01dc Stimulation based epoching "SBE" => #6
  Epoch duration (in sec) = 10
  Epoch offset (in sec) = 2
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#6.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #11
#6.Resynced stimulations -> Stimulation listener "SBE 1 Target"
  Log level to use = Information
Data=#6.Epoched signal -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#4, Input stimulations=#5.New output -> Stimulation based epoching "SBE" => #14
  Epoch duration (in sec) = 10
  Epoch offset (in sec) = 2
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#14.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #19
Stimulations=#3.Output stream 2, Features for class 1=#11, Features for class 2=#19 -> Classifier trainer 1 => #20
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/[4] ClassifierFiles/classifier-1.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
-> Stimulation listener "Classifier Trainer 1"
  Log level to use = Information
#14.Resynced stimulations -> Stimulation listener "SBE 1 NonTarget"
  Log level to use = Information
Data=#14.Epoched signal -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1.Output stream 1 -> Spatial Filter => #24
  Spatial Filter Coefficients = 2.461397e-001 -7.028067e-001 2.454403e-001 -3.323119e-001 -2.828336e-001 4.413740e-001 -1.376949e-001 -3.379824e-001 7.987472e-001 -4.310616e-001 1.794779e-001 1.038485e-001
  Number of Output Channels = 2
  Number of Input Channels = 6
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3] CSPTrainingFiles/csp-2.cfg
Input stream 1=#24, Input stream 2=#1.Output stream 2 -> Identity => #25
#25.Output stream 1 -> Temporal filter "Frequency 2" => #26
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14
  High cut frequency (Hz) = 16
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1] TemporalFilterFreq/temporal-filter-freq-2.cfg
#25.Output stream 2 -> Target Separator => #27
  Lua Script = ${Player_ScenarioDirectory}/scripts/[3] classifier-training-target-separator.lua
  Targets = 2
  Non Targets = 1 3 4
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#26, Input stimulations=#27.Stimulations -> Stimulation based epoching "SBE" => #28
  Epoch duration (in sec) = 10
  Epoch offset (in sec) = 2
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#28.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #33
Input signal=#26, Input stimulations=#27.New output -> Stimulation based epoching "SBE" => #34
  Epoch duration (in sec) = 10
  Epoch offset (in sec) = 2
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#34.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #39
Stimulations=#25.Output stream 2, Features for class 1=#33, Features for class 2=#39 -> Classifier trainer 2 => #40
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/[4] ClassifierFiles/classifier-2.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
#1.Output stream 1 -> Spatial Filter => #41
  Spatial Filter Coefficients = -4.803743e-001 -3.350450e-001 4.965799e-002 -1.024473e-001 7.799618e-001 1.889012e-001 -8.902371e-002 -6.260508e-001 -1.004519e-001 -6.778589e-002 7.624137e-001 6.461476e-002
  Number of Output Channels = 2
  Number of Input Channels = 6
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3] CSPTrainingFiles/csp-3.cfg
Input stream 1=#41, Input stream 2=#1.Output stream 2 -> Identity => #42
#42.Output stream 1 -> Temporal filter "Frequency 3" => #43
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 11
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1] TemporalFilterFreq/temporal-filter-freq-3.cfg
#42.Output stream 2 -> Target Separator => #44
  Lua Script = ${Player_ScenarioDirectory}/scripts/[3] classifier-training-target-separator.lua
  Targets = 3
  Non Targets = 1 2 4
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#43, Input stimulations=#44.Stimulations -> Stimulation based epoching "SBE" => #45
  Epoch duration (in sec) = 10
  Epoch offset (in sec) = 2
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#45.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #50
Input signal=#43, Input stimulations=#44.New output -> Stimulation based epoching "SBE" => #51
  Epoch duration (in sec) = 10
  Epoch offset (in sec) = 2
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#51.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #56
Stimulations=#42.Output stream 2, Features for class 1=#50, Features for class 2=#56 -> Classifier trainer 3 => #57
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/[4] ClassifierFiles/classifier-3.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
#1.Output stream 1 -> Spatial Filter => #58
  Spatial Filter Coefficients = 1.080396e-001 -8.774613e-001 4.396808e-001 5.621283e-002 -8.203303e-002 1.232093e-001 8.035355e-001 -4.803464e-001 1.742155e-001 5.215190e-002 -2.567822e-001 1.568122e-001
  Number of Output Channels = 2
  Number of Input Channels = 6
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3] CSPTrainingFiles/csp-4.cfg
Input stream 1=#58, Input stream 2=#1.Output stream 2 -> Identity => #59
#59.Output stream 1 -> Temporal filter "Frequency 4" => #60
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 9
  High cut frequency (Hz) = 11
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1] TemporalFilterFreq/temporal-filter-freq-4.cfg
#59.Output stream 2 -> Target Separator => #61
  Lua Script = ${Player_ScenarioDirectory}/scripts/[3] classifier-training-target-separator.lua
  Targets = 4
  Non Targets = 1 2 3
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#60, Input stimulations=#61.Stimulations -> Stimulation based epoching "SBE" => #62
  Epoch duration (in sec) = 10
  Epoch offset (in sec) = 2
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#62.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #67
Input signal=#60, Input stimulations=#61.New output -> Stimulation based epoching "SBE" => #68
  Epoch duration (in sec) = 10
  Epoch offset (in sec) = 2
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#68.Epoched signal -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #73
Stimulations=#59.Output stream 2, Features for class 1=#67, Features for class 2=#73 -> Classifier trainer 4 => #74
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/[4] ClassifierFiles/classifier-4.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
New input[0]=#20, New input[1]=#40, New input[2]=#57, New input[3]=#74 -> FlipSwitch
  Lua Script = ${Player_ScenarioDirectory}/scripts/[3] classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
